PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  colPriority = {'': ''}
  expName = Final sub
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent Welcome__text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        Welcome to the Stroop Task Study!

        You will be completing a short attention task.

        Press SPACE to continue.
    KeyboardComponent Space1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Instruction
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    TextComponent Instruction_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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      text:
        You will see the names of colours on the screen, one at a time.

        Your task is to press the key that matches the INK COLOUR of the word,
        not the word meaning.

        For example, if the word BLUE is written in red colour,
        the correct answer is RED.

        Key responses:
        R = Red
        G = Green
        B = Blue
        Y = Yellow

        Press SPACE to start a short practice round.
    KeyboardComponent Spaec2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Preactice
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    TextComponent Word_
      color [set every repeat] = $Colour
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp_practice
      allowedKeys = ['r','g','y','b']
      correctAns = $Correctans
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        Word_.colorSpace = 'named'
        Word_.color = Colour
        Word_.text = Word
      End Routine:
        if key_resp_practice.corr:
            Feedback_text.text = 'Correct!'
        else:
            Feedback_text.text = 'Incorrect'

        thisExp.addData('trialWord', Word)
        thisExp.addData('trialColor', Colour)
        thisExp.addData('trialCondition', Condition)
        thisExp.addData('correctAnswer', Correctans)
        thisExp.addData('response', key_resp_practice.keys)
        thisExp.addData('correct', key_resp_practice.corr)
        thisExp.addData('rt', key_resp_practice.rt)
  Routine Feedback
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    TextComponent Feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine MAIN_Withouttimer
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    TextComponent withouttimer
      color = $Colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $Word
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    KeyboardComponent key_withouttimer
      allowedKeys = ['r','b','y','g']
      correctAns = $Correctans
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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  Routine mian_part1
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    TextComponent main_word1
      color [set every repeat] = $Colur
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent word1_key
      allowedKeys = 'r','y','b','g'
      correctAns = $Correctans
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instruction_beforemain
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Practice session complete!



        There are two tasks in this study :
        -
        Task 1: Without Timer
        .
        Task 2: With timer



        Press SPACE to start Task 1.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Main_NoTimer
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    TextComponent Word_NoTimer
      color [set every repeat] = $Colour
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp_NoTimer
      allowedKeys = 'r','g','b','y'
      correctAns = $Correctans
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        Word_NoTimer.colorSpace = 'named'
        Word_NoTimer.setColor(Colour)
        Word_NoTimer.setText(Word)
      End Routine:
        thisExp.addData('Word', Word)
        thisExp.addData('Colour', Colour)
        thisExp.addData('Condition', Condition)
        thisExp.addData('CorrectAns', Correctans)

        thisExp.addData('KeyPressed', key_resp_NoTimer.keys)
        thisExp.addData('RT', key_resp_NoTimer.rt)
        thisExp.addData('Correct', key_resp_NoTimer.corr)
  Routine Main_Timer
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    CodeComponent TimerCode
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
      Begin Routine:
        if not hasattr(thisExp, "timerClock"):
            thisExp.timerClock = core.Clock()       # starts at 0
            thisExp.timerDuration = 15.0            # total allowed time
      Each Frame:
        elapsed = thisExp.timerClock.getTime()
        remaining = thisExp.timerDuration - elapsed

        sign = "-" if remaining < 0 else ""
        seconds = int(abs(remaining))
        hundredths = int(abs((remaining - int(remaining)) * 100))
        TimerText.setText(f"{sign}{seconds:02d}:{hundredths:02d}")
        if remaining <= 5 and remaining >= 0:
            TimerText.color = "red"
        else:
            TimerText.color = "white"
      End Routine:
        thisExp.addData('Word', Word)
        thisExp.addData('Colour', Colour)
        thisExp.addData('Condition', Condition)
        thisExp.addData('CorrectAns', Correctans)
        thisExp.addData('KeyPressed', key_resp_timer.keys)
        thisExp.addData('RT', key_resp_timer.rt)
        thisExp.addData('Correct', key_resp_timer.corr)
    TextComponent TimerText
      color = 0.3961, -0.7333, -0.7333
      letterHeight = 0.08
      pos = (0.3, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_timer
      allowedKeys = 'r','g','b','y'
      correctAns = $Correctans
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent word_timer
      color [set every repeat] = $Colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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  Routine Task2
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Task 1 complete!



        Next is Task 2,  You have 15 sec to complete this task.



        Press SPACE to start Task 2.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Thanks_Screen_
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    KeyboardComponent Thanks
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the study.



        Thank you for your time and participation!

        Your responses have been recorded.



        You may press SPACE close the Study.
Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = C:/Users/anupm/Desktop/New stroop task/Practice.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Blue'), ('Colour', 'blue'), ('Condition', 'congruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Yellow'), ('Colour', 'yellow'), ('Condition', 'congruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')])]
    Routine Preactice
    Routine Feedback
  LoopTerminator practice_loop
  Routine instruction_beforemain
  LoopInitiator Main_NoTimerLoop loopType="TrialHandler"
    conditionsFile = C:/Users/anupm/Desktop/New stroop task/Wordlist for Main task.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Yellow'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Yellow'), ('Colour', 'blue'), ('Condition', 'incongruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'blue'), ('Condition', 'congruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'blue'), ('Condition', 'congruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'green'), ('Condition', 'congruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'blue'), ('Condition', 'incongruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'red'), ('Condition', 'congruent'), ('Correctans', 'r')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Yellow'), ('Colour', 'yellow'), ('Condition', 'congruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'red'), ('Condition', 'congruent'), ('Correctans', 'r')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'red'), ('Condition', 'incongruent'), ('Correctans', 'r')])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
    Routine Main_NoTimer
  LoopTerminator Main_NoTimerLoop
  Routine Task2
  LoopInitiator Timerloop loopType="TrialHandler"
    conditionsFile = C:/Users/anupm/Desktop/New stroop task/Wordlist for Main task.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Word', 'Yellow'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'green'), ('Condition', 'incongruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Yellow'), ('Colour', 'blue'), ('Condition', 'incongruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'blue'), ('Condition', 'congruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Blue'), ('Colour', 'blue'), ('Condition', 'congruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'green'), ('Condition', 'congruent'), ('Correctans', 'g')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'blue'), ('Condition', 'incongruent'), ('Correctans', 'b')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'red'), ('Condition', 'congruent'), ('Correctans', 'r')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'yellow'), ('Condition', 'incongruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Yellow'), ('Colour', 'yellow'), ('Condition', 'congruent'), ('Correctans', 'y')]),
      OrderedDict([('Word', 'Red'), ('Colour', 'red'), ('Condition', 'congruent'), ('Correctans', 'r')]),
      OrderedDict([('Word', 'Green'), ('Colour', 'red'), ('Condition', 'incongruent'), ('Correctans', 'r')])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
    Routine Main_Timer
  LoopTerminator Timerloop
  Routine Thanks_Screen_
